PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = meta
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Routines
  Routine tela_inicial
    CodeComponent code_7
      Code Type = Py
      Begin Experiment:
        screens = ([],[],[],[],[],[],[]) # create a tuple of empty lists
        texts = ['','','','','','',''] # create a list of empty strings
        with open('languages/pt-br') as f: # open translation file
            for element in screens:
                for line in f: # iterates over the lines in language file
                    if line != '#\n': # checks for the # separator
                        element.append(line) # insert the line into the list in tuple
                    else:
                        break # pass when # is found
        cont = 0
        for element in screens:
            texts[cont] = ''.join(element) # concatenates the list elements into a string
            cont += 1
    TextComponent texto_tela_inicial
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $texts[0]
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    KeyboardComponent key_resp_ti
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instrucao_resposta
    TextComponent text_ir
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $texts[1]
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instrucao_inicio
    TextComponent text_ii
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $texts[2]
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    KeyboardComponent key_resp_ii
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        f = np.arange(40)
        d = np.arange(40)
        ff = np.arange(40)
        dd = np.arange(40)
        np.random.shuffle(f)
        np.random.shuffle(d)
        np.random.shuffle(ff)
        np.random.shuffle(dd)
        e = np.random.randint(1,3, size=40)
        ee = np.random.randint(1,3, size=40)
        caminho = "./mooneyfaces/"
        file = ""
        bloco = 1
  Routine fixate
    TextComponent text
      color = red
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine case_1
    CodeComponent code_2
      Code Type = Py
      Each Frame:
        if e[i] == 1:
            file = caminho + 'f' + str(f[i]) + '.jpg'
        else:
            file = caminho + 'd' +str(d[i]) + '.jpg'
    ImageComponent image_1
      image [set every frame] = $file
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine inter_time
    TextComponent text_it
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine case_2
    CodeComponent code_3
      Code Type = Py
      Each Frame:
        if e[i] == 2:
            file = caminho + 'f' + str(f[i]) + '.jpg'
        else:
            file = caminho + 'd' + str(d[i]) + '.jpg'
      End Routine:
        i = i + 1
    ImageComponent image_2
      image [set every frame] = $file
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine confianca
    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $texts[5]
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    RatingScaleComponent rating
      forceEndRoutine = True
      high = 5
      low = 1
      pos = 0, -0.6
      saveStartStop = False
      size = 1.0
      startVal [time (s)] = 0.0
      storeRatingTime = False
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  Routine case_3
    CodeComponent code_4
      Code Type = Py
      Each Frame:
        if ee[i] == 1:
            file = caminho + 'f' + str(ff[i]) + '.jpg'
        else:
            file = caminho + 'd' +str(dd[i]) + '.jpg'
    ImageComponent image
      image [set every frame] = $file
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine case_4
    CodeComponent code_6
      Code Type = Py
      Each Frame:
        if ee[i] == 2:
            file = caminho + 'f' + str(ff[i]) + '.jpg'
        else:
            file = caminho + 'd' + str(dd[i]) + '.jpg'
      End Routine:
        i = i + 1
    ImageComponent image_3
      image [set every frame] = $file
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine reset
    CodeComponent code_5
      Code Type = Py
      Each Frame:
        i = 0
        texto = texts[3][:-1] + " %i" %(bloco)
      End Routine:
        bloco = bloco + 1
    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $texto
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  Routine novo_bloco
  Routine resposta_2
    TextComponent text_resposta_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = $texts[5]
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    KeyboardComponent key_resp_3
      allowedKeys = '1','2'
      correctAns = $ee[i-1]
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine resposta
    TextComponent text_4
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = $texts[4]
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2'
      correctAns = $e[i-1]
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine fim
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = $texts[6]
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Flow
  Routine tela_inicial
  Routine instrucao_resposta
  Routine instrucao_inicio
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine reset
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 40
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      Routine fixate
      Routine case_1
      Routine inter_time
      Routine case_2
      Routine resposta
      Routine confianca
    LoopTerminator trials
    Routine reset
    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = random
      nReps = 40
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      Routine fixate
      Routine case_3
      Routine inter_time
      Routine case_4
      Routine resposta_2
      Routine confianca
    LoopTerminator trials_2
  LoopTerminator trials_3
  Routine fim
